PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = CLT
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Please answer the questions presented to you. Press space bar to start the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine experiment
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size [set every repeat] = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent set1rep
      image = C:/Users/Vinisha/Desktop/Lab in psychology/final assigment/Set 1 (Mark)/Mark-R.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ButtonComponent buttontomorrow
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text = tomorrow
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    ButtonComponent buttoninayear
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4,-0.4)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
      text = In a year
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size [set every repeat] = (0.05, 0.05)
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 1.0
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    ImageComponent set1intermediate1
      image = C:/Users/Vinisha/Desktop/Lab in psychology/final assigment/Set 1 (Mark)/Mark-I.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 7.0
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    ButtonComponent buttontomorrow_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      size = (0.3, 0.3)
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 7.0
      text = tomorrow
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    ButtonComponent buttoninayear_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4,-0.4)
      size = (0.3, 0.3)
      startVal [time (s)] = 9.0
      stopVal [duration (s)] = 7.0
      text = In a year
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  Routine thankyou
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    TextComponent ThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        Thank You for participating in the study!
        We hope you enjoyed!
  Routine questions
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    TextComponent question1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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      text:
        How would you characterise your experience with art?
        a. novice
        b. enthusiasts
        c. art historian
        d. artist
    SliderComponent slideranswer
      forceEndRoutine = True
      granularity = 0
      labels = "novice", "enthusiasts", "art historian", "artist"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      styles = rating
      ticks = (1, 2, 3, 4)
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    TextComponent question2
      letterHeight = 0.05
      startVal [time (s)] = 16.0
      stopVal [duration (s)] = 10.0
      text = How may hours a week do you look at art?
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.05, 0.05)
      startVal [time (s)] = 16.0
      stopVal [duration (s)] = 10.0
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  Routine instruction1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Imagine yourself as an art consultant and mark weather the painting should be placed in the exhibition held tomorrow or later in the year. Press space bar to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Now, rate how much you liked each painting on the scale of 1-7.
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  Routine experiment2
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    PolygonComponent fixation_1
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image [set every repeat] = $pics
      pos = (0, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "least likely", "most likely"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine experiment1
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    PolygonComponent fixation1
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $pics
      pos = (0, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
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    ButtonComponent buttontomorrow_1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
      text = tomorrow
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    ButtonComponent buttoninayear_1
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4,-0.4)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
      text = In a year
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  Routine instructions3
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    TextComponent instruction_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      text = Now, rate how abstract each painting is on the scale of 1-7.
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  Routine experiment3
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    PolygonComponent fixation_3
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image [set every repeat] = $pics
      pos = (0, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = "least absract", "most abstract"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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Flow
  Routine welcome
  Routine questions
  Routine instruction1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Vinisha/Desktop/Lab in psychology/conditions files/CLT.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 1 (Mark)\\Mark-I.jpg', 'type': 'i'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 1 (Mark)\\Mark-N.jpg', 'type': 'n'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 1 (Mark)\\Mark-R.jpg', 'type': 'r'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 2 (Mark)\\Mark-N.jpg', 'type': 'n'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 2 (Mark)\\Mark-I.jpg', 'type': 'i'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 2 (Mark)\\Mark-R.jpg', 'type': 'r'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 3 (Piet)\\Piet-R.jpg', 'type': 'r'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 3 (Piet)\\Piet-I.jpg', 'type': 'i'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 3 (Piet)\\Piet-N.jpg', 'type': 'n'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 4 (Piet)\\Piet-N.jpg', 'type': 'n'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 4 (Piet)\\Piet-R.jpg', 'type': 'r'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 4 (Piet)\\Piet-I.jpg', 'type': 'i'},
      {'pics': 'C:\\Users\\Vinisha\\Desktop\\Lab in psychology\\final assigment\\Set 5 (Clifford)\\Clifford-R.jpg', 'type': 'r'}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
    Routine experiment1
  LoopTerminator trials
  Routine instruction2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Vinisha/Desktop/Lab in psychology/conditions files/CLT.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine experiment2
  LoopTerminator trials_2
  Routine instructions3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = C:/Users/Vinisha/Desktop/Lab in psychology/conditions files/CLT.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine experiment3
  LoopTerminator trials_3
  Routine questions
  Routine thankyou
